import:
- data_loader.yaml

graphs:

  - id: Broker
    nodes:
    - id: proxy
      module: timeflux.nodes.zmq
      class: Broker

  - id: Subscriber
    nodes:
    # Subscription
    - id: sub
      module: timeflux.nodes.zmq
      class: Sub
      params:
        topics: [ {{SPEECH_STREAM_NAME}}, {{EEG_STREAM_NAME}}, {{LABEL_STREAM_NAME}} ]

    # Data Processing
    - id: unifier
      module: nodes.unifier
      class: Unifier
      params:
        name: unifier
        stream_names: [ {{SPEECH_STREAM_NAME}}, {{EEG_STREAM_NAME}}, {{LABEL_STREAM_NAME}} ]

    - id: fitter
      module: nodes.fitter
      class: Fitter
      params: 
        name: fitter
        min_time_frames_in_buffer: {{FITTER_MIN_TIME_FRAMES_IN_BUFFER}}
        eeg_stream_name: {{EEG_STREAM_NAME}}
        speech_stream_name: {{SPEECH_STREAM_NAME}}
        label_stream_name: {{LABEL_STREAM_NAME}}
        neural_network_type: {{NEURAL_NETWORK_TYPE}}
        parameters_path: {{NEURAL_NETWORK_PARAMETERS_PATH}}
        start_from_prefit: {{FITTER_START_FROM_PREFIT}}
        skip: {{FITTER_SKIP}}

    - id: predictor
      module: nodes.predictor
      class: Predictor
      params:
        name: predictor
        eeg_stream_name: {{EEG_STREAM_NAME}}
        speech_stream_name: {{SPEECH_STREAM_NAME}}
        label_stream_name: {{LABEL_STREAM_NAME}}
        neural_network_type: {{NEURAL_NETWORK_TYPE}}
        parameters_path: {{NEURAL_NETWORK_PARAMETERS_PATH}}
        skip: {{PREDICTOR_SKIP}}

    - id: vocgan
      module: nodes.vocgan
      class: VocGan
      params:
        name: vocgan

    # Monitoring
    - id: spectrogram
      module: nodes.monitor
      class: Imshow
      params:
        name: spectrogram
        time_frames_in_buffer: {{MONITOR_TIME_FRAMES_IN_BUFFER}}
        title: "Speech"
        y_label: "Mel Bins"
        height: 2
        is_visible: {{MONITOR_SPECTROGRAM_VISIBLE}}
    
    - id: eeg_monitor
      module: nodes.monitor
      class: Imshow
      params:
        name: eeg_monitor
        time_frames_in_buffer: {{MONITOR_TIME_FRAMES_IN_BUFFER}}
        title: "EEG"
        y_label: "Features"
        height: 2.5
        is_visible: {{MONITOR_EEG_VISIBLE}}

    - id: label_monitor
      module: nodes.monitor
      class: Text
      params:
        name: label_monitor
        time_frames_in_buffer: {{MONITOR_TIME_FRAMES_IN_BUFFER}}
        title: "Words"
        y_label: "Word"
        y_lower: 0
        y_upper: 1
        height: 2
        is_visible: {{MONITOR_LABEL_VISIBLE}}

    - id: loss_monitor
      module: nodes.monitor
      class: Plot
      params:
        name: loss_monitor
        time_frames_in_buffer: {{MONITOR_TIME_FRAMES_IN_BUFFER}}
        title: "Loss"
        y_label: "Mean Squared Error"
        y_lower: 0
        height: 2.5
        is_visible: {{MONITOR_LOSS_VISIBLE}}

    - id: waveform_monitor
      module: nodes.monitor
      class: Plot
      params:
        name: waveform_monitor
        time_frames_in_buffer: {{MONITOR_TIME_FRAMES_IN_BUFFER_WAVEFORM}}
        title: "Speech Waveform"
        y_label: "Amplitude"
        y_lower: -1.25
        y_upper: 1.25
        height: 2.5
        is_visible: {{MONITOR_WAVEFORM_VISIBLE}}

    edges:
      # Data Processing
      - source: sub:{{SPEECH_STREAM_NAME}}
        target: unifier:{{SPEECH_STREAM_NAME}}
      - source: sub:{{EEG_STREAM_NAME}}
        target: unifier:{{EEG_STREAM_NAME}}
      - source: sub:{{LABEL_STREAM_NAME}}
        target: unifier:{{LABEL_STREAM_NAME}}
      - source: unifier
        target: fitter
      - source: sub:{{EEG_STREAM_NAME}}
        target: predictor:{{EEG_STREAM_NAME}}
      - source: sub:{{LABEL_STREAM_NAME}}
        target: predictor:{{LABEL_STREAM_NAME}}
      - source: sub:{{SPEECH_STREAM_NAME}}
        target: predictor:{{SPEECH_STREAM_NAME}}
      - source: fitter
        target: predictor:losses
      - source: predictor
        target: vocgan

      # Monitoring
      - source: predictor
        target: spectrogram
      - source: sub:{{EEG_STREAM_NAME}}
        target: eeg_monitor
      - source: sub:{{LABEL_STREAM_NAME}}
        target: label_monitor
      - source: fitter
        target: loss_monitor
      - source: vocgan
        target: waveform_monitor
    
    rate: {{MAIN_RATE}}
